# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: DAC_20x

# The version string should be updated whenever changes are made to this config file
version: 1.0

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: DAC_20x

# General VISA settings for the instrument.
[VISA settings]
str_value_out: %.6f
term_char: CR
send_end_on_write: True
baud_rate: 9600
# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa = True
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
[Channel 0 Voltage]
datatype: DOUBLE
unit: V
permission: WRITE
set_cmd: SET,0,<*>
get_cmd: GET_DAC,0
def_value: 0
low_lim: -10
high_lim: 10

[Channel 1 Voltage]
datatype: DOUBLE
unit: V
permission: WRITE
set_cmd: SET,1,<*>
get_cmd: GET_DAC,1
def_value: 0
low_lim: -150
high_lim: 150

[Channel 2 Voltage]
datatype: DOUBLE
unit: V
permission: WRITE
set_cmd: SET,2,<*>
get_cmd: GET_DAC,2
def_value: 0
low_lim: -10
high_lim: 10

[Channel 3 Voltage]
datatype: DOUBLE
unit: V
permission: WRITE
set_cmd: SET,3,<*>
get_cmd: GET_DAC,3
def_value: 0
low_lim: -10
high_lim: 10

[Channel 4 Voltage]
datatype: DOUBLE
unit: V
permission: WRITE
set_cmd: SET,4,<*>
get_cmd: GET_DAC,4
def_value: 0
low_lim: -10
high_lim: 10

[Channel 5 Voltage]
datatype: DOUBLE
unit: V
permission: WRITE
set_cmd: SET,5,<*>
get_cmd: GET_DAC,5
def_value: 0
low_lim: -10
high_lim: 10

[Channel 6 Voltage]
datatype: DOUBLE
unit: V
permission: WRITE
set_cmd: SET,6,<*>
get_cmd: GET_DAC,6
def_value: 0
low_lim: -10
high_lim: 10

[Channel 7 Voltage]
datatype: DOUBLE
unit: V
permission: WRITE
set_cmd: SET,7,<*>
get_cmd: 
def_value: 0
low_lim: -125
high_lim: 125

