# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: Pixis

# The version string should be updated whenever changes are made to this config file
version: 1.0

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: Pixis

# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa = False

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
### We also want to set the integration time, from 10 ms to 15 minutes
#USB\VID_0BD7&PID_A026\7&16520C2E&0&4

[Integration Time]
datatype: DOUBLE
def_value: 20
unit: ms
low_lim: 10
permission: WRITE

[Temperature]
datatype: DOUBLE
def_value: -75
unit: C
low_lim: -75
high_lim: 0
permission: BOTH

[Intensity]
datatype: VECTOR
unit: Counts
permission: READ
x_name: Wavelength
x_unit: nm

[Image]
datatype: VECTOR
unit: Counts
permission: READ
x_name: Wavelength
x_unit: nm

[Intensity Dark Corrected]
datatype: VECTOR
unit: Counts
permission: READ
x_name: Wavelength
x_unit: nm

[Configure Camera]
datatype: VECTOR
def_value: [0 0 1024 1024 1 1]
unit: Counts
permission: BOTH
x_name: Array
x_unit: nm

[ROI X]
datatype: DOUBLE
unit: Pixel
permission:WRITE
set_cmd: NOP
get_cmd: NOP
def_value: 0
low_lim: 0
high_lim: 1024

[ROI Y]
datatype: DOUBLE
unit: Pixel
permission:WRITE
set_cmd: NOP
get_cmd: NOP
def_value: 0
low_lim: 0
high_lim: 1024

[ROI Width]
datatype: DOUBLE
unit: Pixel
permission:WRITE
set_cmd: NOP
get_cmd: NOP
def_value: 1024
low_lim: 1
high_lim: 1024

[ROI Height]
datatype: DOUBLE
unit: Pixel
permission:WRITE
set_cmd: NOP
get_cmd: NOP
def_value: 1024
low_lim: 1
high_lim: 1024

[ROI X Binning]
datatype: DOUBLE
unit: Pixel
permission:WRITE
set_cmd: NOP
get_cmd: NOP
def_value: 1
low_lim: 1
high_lim: 1024

[ROI Y Binning]
datatype: DOUBLE
unit: Pixel
permission:WRITE
set_cmd: NOP
get_cmd: NOP
def_value: 1
low_lim: 1
high_lim: 1024

[Dark Spectrum]
datatype: VECTOR
unit: Counts
permission: READ
x_name: Wavelength
x_unit: nm

#[Configure Camera]
#datatype: COMBO
#permission: WRITE
#combo_def_1: Configure
#combo_def_2: Not_Configure
#set_cmd: NOP
#get_cmd: NOP
#def_value: 200

